/control/alias time 0.01
/control/alias out output
/control/alias seed 1

# ===========================
# == LOAD DATABASE         ==
# ===========================
/gate/geometry/setMaterialDatabase    ../../data/GateMaterials.db

# ===========================
# ==   GEOMETRY            ==
# ===========================
/control/execute                     mac/geometry.mac

# ===========================
# ==  PHYSICS              ==
# ===========================
# emlivermore, emstandard_opt3 or emstandard_opt4 include doppler broadening, emstandard does not
/gate/physics/addPhysicsList emstandard
# TODO: possible to use livermore and switch off doppler broadening?
#/gate/physics/Gamma/SetCutInRegion      absorber 0.01 mm # default is 1 mm
#/gate/physics/Electron/SetCutInRegion   absorber 0.01 mm # default is 1 mm
/gate/physics/displayCuts

# =============================
# == ACTORS                  ==
# =============================
/control/execute mac/actor.mac

# ============================
# == INITIALIZE             ==
# ============================
/gate/run/initialize

# ============================
# ==  VISUALIZATION         ==
# ============================
# /control/execute                     mac/visu.mac

# ============================
# == SOURCE                 ==
# ============================
/control/execute                     mac/source.mac

# ============================
# == OUTPUT                 ==
# ============================
/gate/application/noGlobalOutput # avoids output related to PET/SPECT systems

#====================================================
#  R A N D O M   E N G I N E  A N D  S E E D
#====================================================
/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed {seed} # 6781

#=====================================================
#   M E A S U R E M E N T   S E T T I N G S   
#=====================================================
#/gate/application/setTimeSlice  {time} s
#/gate/application/setTimeStart   0.00   s
#/gate/application/setTimeStop    {time} s
/gate/application/setTotalNumberOfPrimaries 100000
/gate/application/startDAQ



